opentrons/protocol-designer 5.1.0
schemaVersion: 3
protocolName: 0_MakeIndexPlates_Part1
description: Multichannel I7 indexes and single channel half of i5 indexes.
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
  p20_multi_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 10}
  Plate1: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 1}
  Plate2: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 2}
  Plate3: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 3}
  Plate4: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 4}
  Plate5: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 5}
  Plate6: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 6}
  Index Plate: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 7}
  Opentrons 96 Filter Tip Rack 20 µL (1): {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 8}
  Opentrons 96 Filter Tip Rack 20 µL (2): {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 9}
  Opentrons 96 Filter Tip Rack 20 µL (3): {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 11}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_filtertiprack_20ul/1
  p20_multi_gen2: opentrons/opentrons_96_filtertiprack_20ul/1
ingredients:
  - ForwardPrimer: {description: I5 primer, serialize: true}
  - ReversePRimer: {description: i7 indices, serialize: true}
ingredLocations:
  Index Plate:
    ForwardPrimer {volume: 150}: A1-H1, A2-H2, A3-H3
    ReversePRimer {volume: 150}: A10-H10, A11-H11, A12-H12
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: once
  aspirate_labware: Index Plate
  aspirate_wells: A10
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate1
  dispense_wells: A1-A12
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: once
  aspirate_labware: Index Plate
  aspirate_wells: A10
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate4
  dispense_wells: A1-A12
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: once
  aspirate_labware: Index Plate
  aspirate_wells: A11
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate2
  dispense_wells: A1-A12
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: once
  aspirate_labware: Index Plate
  aspirate_wells: A11
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate5
  dispense_wells: A1-A12
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: once
  aspirate_labware: Index Plate
  aspirate_wells: A12
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate3
  dispense_wells: A1-A12
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 5
  path: single
  changeTip: once
  aspirate_labware: Index Plate
  aspirate_wells: A12
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate6
  dispense_wells: A1-A12
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate1
  dispense_wells: A1-H1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate2
  dispense_wells: A1-H1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate3
  dispense_wells: A1-H1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate1
  dispense_wells: A2-H2
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate2
  dispense_wells: A2-H2
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate3
  dispense_wells: A2-H2
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: C1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate1
  dispense_wells: A3-H3
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: C1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate2
  dispense_wells: A3-H3
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: C1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate3
  dispense_wells: A3-H3
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: D1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate1
  dispense_wells: A4-H4
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: D1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate2
  dispense_wells: A4-H4
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: D1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate3
  dispense_wells: A4-H4
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: E1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate1
  dispense_wells: A5-H5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: E1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate2
  dispense_wells: A5-H5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: E1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate3
  dispense_wells: A5-H5
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: F1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate1
  dispense_wells: A6-H6
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: F1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate2
  dispense_wells: A6-H6
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: F1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate3
  dispense_wells: A6-H6
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: G1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate1
  dispense_wells: A7-H7
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: G1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate2
  dispense_wells: A7-H7
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: G1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate3
  dispense_wells: A7-H7
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: H1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate1
  dispense_wells: A8-H8
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: H1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate2
  dispense_wells: A8-H8
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: H1
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate3
  dispense_wells: A8-H8
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate1
  dispense_wells: A9-H9
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate2
  dispense_wells: A9-H9
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate3
  dispense_wells: A9-H9
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: B2
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate1
  dispense_wells: A10-H10
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: B2
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate2
  dispense_wells: A10-H10
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: B2
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate3
  dispense_wells: A10-H10
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: C2
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate1
  dispense_wells: A11-H11
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: C2
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate2
  dispense_wells: A11-H11
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: C2
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate3
  dispense_wells: A11-H11
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: D2
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate1
  dispense_wells: A12-H12
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: D2
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate2
  dispense_wells: A12-H12
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: D2
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate3
  dispense_wells: A12-H12
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: E2
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate4
  dispense_wells: A1-H1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: E2
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate5
  dispense_wells: A1-H1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: E2
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate6
  dispense_wells: A1-H1
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: F2
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate4
  dispense_wells: A2-H2
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: F2
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate5
  dispense_wells: A2-H2
  dispense_mmFromBottom: 0.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 5
  path: single
  changeTip: always
  aspirate_labware: Index Plate
  aspirate_wells: F2
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  aspirate_mmFromBottom: 1
  dispense_labware: Plate6
  dispense_wells: A2-H2
  dispense_mmFromBottom: 0.5
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p20_multi_gen2, labware: Opentrons 96 Filter Tip Rack 20 µL (1), well: A1}
- aspirate: {pipette: p20_multi_gen2, volume: 5, labware: Index Plate, well: A10, offsetFromBottomMm: 1, flowRate: 7.6}
- dispense: {pipette: p20_multi_gen2, volume: 5, labware: Plate1, well: A1, offsetFromBottomMm: 0.5, flowRate: 7.6}
- aspirate: {pipette: p20_multi_gen2, volume: 5, labware: Index Plate, well: A10, offsetFromBottomMm: 1, flowRate: 7.6}
- dispense: {pipette: p20_multi_gen2, volume: 5, labware: Plate1, well: A2, offsetFromBottomMm: 0.5, flowRate: 7.6}
- aspirate: {pipette: p20_multi_gen2, volume: 5, labware: Index Plate, well: A10, offsetFromBottomMm: 1, flowRate: 7.6}
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