opentrons/protocol-designer 5.1.0
schemaVersion: 3
protocolName: 2_PrimaryPCR
author: J Bisanz
description: Transfer  9ul to all wells of 384 well plate and add 1ul gDNA to qPCR plate for primary PCR and carry out 3x 10x dilutions
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
  p20_multi_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 4}
  gDNA: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 1}
  PCR Plate: {definitionId: custom_beta/biorad384pcrplate_384_wellplate_40ul/1, slot: 2}
  MasterMix: {definitionId: opentrons/usascientific_12_reservoir_22ml/1, slot: 5}
  Opentrons 96 Filter Tip Rack 20 µL (1): {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 7}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_filtertiprack_20ul/1
  p20_multi_gen2: opentrons/opentrons_96_filtertiprack_20ul/1
ingredients:
  - MasterMix
  - gDNA
ingredLocations:
  gDNA:
    gDNA {volume: 80}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  MasterMix:
    MasterMix {volume: 3780}: A1
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 9
  path: single
  changeTip: once
  aspirate_labware: MasterMix
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A1, B1, A2, B2, A3, B3, A4, B4, A5, B5, A6, B6, A7, B7, A8, B8, A9, B9, A10, B10, A11, B11, A12, B12, A13, B13, A14, B14, A15, B15, A16, B16, A17, B17, A18, B18, A19, B19, A20, B20, A21, B21, A22, B22, A23, B23, A24, B24
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A1
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B1
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A13
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A13
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B13
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A2
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B2
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B2
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A14
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A14
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B14
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A3
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B3
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B3
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A15
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A15
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B15
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A4
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B4
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B4
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A16
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A16
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B16
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A5
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B5
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B5
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A17
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A17
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B17
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A6
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B6
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B6
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A18
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A18
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B18
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A7
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A7
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A7
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B7
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B7
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A19
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A19
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B19
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A8
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A8
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A8
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B8
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B8
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A20
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A20
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B20
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A9
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A9
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A9
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B9
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B9
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A21
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A21
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B21
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A10
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A10
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B10
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A22
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A22
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B22
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A11
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A11
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A11
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B11
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B11
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A23
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A23
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B23
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A12
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A12
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A12
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B12
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B12
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A24
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A24
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B24
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
labwareDefinitions:
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  custom_beta/biorad384pcrplate_384_wellplate_40ul/1:
    brand: {brand: Biorad 384 PCR Plate, brandId: [Biorad HSP3865]}
    metadata: {displayName: Biorad 384 PCR Plate 384 Well Plate 40 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.46, zDimension: 10.4}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: biorad384pcrplate_384_wellplate_40ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 9.35, totalLiquidVolume: 40, shape: circular, diameter: 3.1, x: 12.13, y: 76.47, z: 1.05}
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commands:
- pickUpTip: {pipette: p20_multi_gen2, labware: Opentrons 96 Filter Tip Rack 20 µL, well: A1}
- aspirate: {pipette: p20_multi_gen2, volume: 9, labware: MasterMix, well: A1, offsetFromBottomMm: 1, flowRate: 7.6}
- dispense: {pipette: p20_multi_gen2, volume: 9, labware: PCR Plate, well: A1, offsetFromBottomMm: 0.5, flowRate: 7.6}
- touchTip: {pipette: p20_multi_gen2, labware: PCR Plate, well: A1, offsetFromBottomMm: 8.35}
- aspirate: {pipette: p20_multi_gen2, volume: 9, labware: MasterMix, well: A1, offsetFromBottomMm: 1, flowRate: 7.6}
- dispense: {pipette: p20_multi_gen2, volume: 9, labware: PCR Plate, well: B1, offsetFromBottomMm: 0.5, flowRate: 7.6}
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