opentrons/protocol-designer 5.2.1
schemaVersion: 3
protocolName: 2_PrimaryPCR_manual
author: J Bisanz
description: Add 1ul gDNA to qPCR plate for primary PCR and carry out 3x 10x dilutions
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p20_single_gen2: {mount: left}
  p20_multi_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Filter Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_filtertiprack_20ul/1, slot: 4}
  gDNA: {definitionId: opentrons/biorad_96_wellplate_200ul_pcr/1, slot: 1}
  PCR Plate: {definitionId: custom_beta/biorad384pcrplate_384_wellplate_40ul/1, slot: 2}
pipetteTiprackAssignments:
  p20_single_gen2: opentrons/opentrons_96_filtertiprack_20ul/1
  p20_multi_gen2: opentrons/opentrons_96_filtertiprack_20ul/1
ingredients:
  - MasterMix
  - gDNA
ingredLocations:
  gDNA:
    gDNA {volume: 80}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
  PCR Plate:
    MasterMix {volume: 8}: A1-P1, A2-P2, A3-P3, A4-P4, A5-P5, A6-P6, A7-P7, A8-P8, A9-P9, A10-P10, A11-P11, A12-P12, A13-P13, A14-P14, A15-P15, A16-P16, A17-P17, A18-P18, A19-P19, A20-P20, A21-P21, A22-P22, A23-P23, A24-P24
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A1
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A1
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B1
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B1
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A13
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A13
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B13
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A2
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A2
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B2
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B2
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A14
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A14
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B14
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A3
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A3
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B3
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B3
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A15
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A15
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B15
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A4
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A4
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B4
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B4
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A16
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A16
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B16
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A5
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A5
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B5
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B5
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A17
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A17
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B17
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A6
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A6
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B6
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B6
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A18
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A18
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B18
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A7
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A7
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A7
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B7
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B7
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A19
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A19
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B19
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A8
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A8
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A8
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B8
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B8
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A20
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A20
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B20
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A9
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A9
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A9
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B9
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B9
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A21
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A21
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B21
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A10
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A10
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B10
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B10
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A22
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A22
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B22
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A11
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A11
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A11
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B11
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B11
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A23
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A23
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B23
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: once
  aspirate_labware: gDNA
  aspirate_wells: A12
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A12
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A12
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B12
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: B12
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: A24
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_multi_gen2
  volume: 1
  path: single
  changeTip: never
  aspirate_labware: PCR Plate
  aspirate_wells: A24
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  aspirate_mmFromBottom: 1
  dispense_labware: PCR Plate
  dispense_wells: B24
  dispense_mix_checkbox: true
  dispense_mix_times: 3
  dispense_mix_volume: 3
  dispense_mmFromBottom: 0.5
  dispense_touchTip_checkbox: true
labwareDefinitions:
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  custom_beta/biorad384pcrplate_384_wellplate_40ul/1:
    brand: {brand: Biorad 384 PCR Plate, brandId: [Biorad HSP3865]}
    metadata: {displayName: Biorad 384 PCR Plate 384 Well Plate 40 µL, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.46, zDimension: 10.4}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: biorad384pcrplate_384_wellplate_40ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 9.35, totalLiquidVolume: 40, shape: circular, diameter: 3.1, x: 12.13, y: 76.47, z: 1.05}
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commands:
- pickUpTip: {pipette: p20_multi_gen2, labware: Opentrons 96 Filter Tip Rack 20 µL, well: A1}
- aspirate: {pipette: p20_multi_gen2, volume: 1, labware: gDNA, well: A1, offsetFromBottomMm: 1, flowRate: 7.6}
- dispense: {pipette: p20_multi_gen2, volume: 1, labware: PCR Plate, well: A1, offsetFromBottomMm: 0.5, flowRate: 7.6}
- aspirate: {pipette: p20_multi_gen2, volume: 3, labware: PCR Plate, well: A1, offsetFromBottomMm: 0.5, flowRate: 7.6}
- dispense: {pipette: p20_multi_gen2, volume: 3, labware: PCR Plate, well: A1, offsetFromBottomMm: 0.5, flowRate: 7.6}
- aspirate: {pipette: p20_multi_gen2, volume: 3, labware: PCR Plate, well: A1, offsetFromBottomMm: 0.5, flowRate: 7.6}
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